PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        WELCOME TO THE EXPERIMENT


        You will see images of numbers from 1 to 10.
        Press 'A' on the keyboard ONLY when you see an EVEN number.
        Do NOT press any key when you see an ODD number.
        There will be 5 blocks in total.

        Press 'SPACE' to begin the experiment.
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    TextComponent Fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent number_image
      image [set every repeat] = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'a','escape'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    CodeComponent lsl_code
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Initialize LSL Marker Outlet
        info = StreamInfo('PsychoPy_Markers', 'Markers', 1, 0, 'string', 'psychopy_lsl_1001')
        outlet = StreamOutlet(info)
      Begin Routine:
        response_sent = False  # Reset response tracker for each trial

        # Schedule frame-precise LSL marker when image appears on screen
        win.callOnFlip(outlet.push_sample, [marker_name])
      Each Frame:
        # Check if key 'a' was pressed during image presentation
        if key_resp.keys and not response_sent:
            if 'a' in key_resp.keys:
                response_sent = True

                # Determine correctness (is_even comes from Excel file: 1 = Even, 0 = Odd)
                if is_even == 1:
                    outlet.push_sample(['Corr'])
                else:
                    outlet.push_sample(['Incorr'])
      End Routine:
        # Add 1.0 second Inter-Trial Interval (ITI) blank screen
        core.wait(1.0)
  Routine EndScreen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Experiment Complete! Thank you.
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Flow
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'image_file': 'images/1.png', 'is_even': 0.0, 'marker_name': 'S1'},
        {'image_file': 'images/2.png', 'is_even': 1.0, 'marker_name': 'S2'},
        {'image_file': 'images/3.png', 'is_even': 0.0, 'marker_name': 'S3'},
        {'image_file': 'images/4.png', 'is_even': 1.0, 'marker_name': 'S4'},
        {'image_file': 'images/5.png', 'is_even': 0.0, 'marker_name': 'S5'},
        {'image_file': 'images/6.png', 'is_even': 1.0, 'marker_name': 'S6'},
        {'image_file': 'images/7.png', 'is_even': 0.0, 'marker_name': 'S7'},
        {'image_file': 'images/8.png', 'is_even': 1.0, 'marker_name': 'S8'},
        {'image_file': 'images/9.png', 'is_even': 0.0, 'marker_name': 'S9'},
        {'image_file': 'images/10.png', 'is_even': 1.0, 'marker_name': 'S10'}]
      Routine Trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine EndScreen
